PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Completed URL = https://app.prolific.com/submissions/complete?cc=CC0KBFHH
  Experiment info = {'participant': '', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[0.5, 0.5, 0.5]
  expName = VH_v3
  keyboardBackend = ioHub
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Routines
  Routine Instraction
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    UnknownComponent Instraction_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    TextComponent textınstraction
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Asıl teste geçmektesiniz. Deneydeki göreviniz, ekrana çıkacak Türkçe sözcüklerin kelime olup olmadığını belirlemenizdir. Testte geri bildirim olmayacaktır.
        Kelimedir: "m"
        Kelime değildir: "z"

        Teste başlamak için BOŞLUK tuşuna basınız.
    KeyboardComponent key_respınstraction
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback
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    UnknownComponent Feedback_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent codefeedback
      Code Type = Auto->JS
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      Begin Experiment:
        corr = []
        msg = ''
        msgColor = []
      Begin Routine:
        if rt < 2 :
            if corr == 1:
                msg = 'DOĞRU !'
                msgColor = 'black'
            else:
                msg = 'YANLIŞ !'
                msgColor = 'black'
        else:
            msg = 'YAVAŞ CEVAP !'
            msgColor = 'black'


           #eğer reation time ikiden küçükse: 1 doğru, 0 yanlış.
            #burada ikiden büyük olursa yavaş cevap verdiğini göstermek için böyle yaptık.
            #ikiin üstü yanlış cevap
    TextComponent textfeedback
      color [set every repeat] = $msgColor
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      pos = (-0.5, -.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Kelime değildir: "z"
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    TextComponent text_8
      color = black
      letterHeight = 0.05
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Kelimedir: "m"
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  Routine TestTrial
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    UnknownComponent TestTrial_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        #number = ""

        trialCount = 0
        breakTrials = [121,241]
      Begin Routine:
        #number = test_loop.thisN

        trialCount = trialCount + 1
    TextComponent test_trial
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $target
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    KeyboardComponent key_respTest
      allowedKeys = 'z','m'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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    TextComponent text_5
      color = black
      letterHeight = 0.05
      pos = (-0.5, -.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Kelime değildir: "z"
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    TextComponent text_6
      color = black
      letterHeight = 0.05
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Kelimedir: "m"
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  Routine Welcome_screen
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # event.Mouse(visible=False)
    TextComponent textWelcome
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Introduction
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    KeyboardComponent key_respwelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Goodbye_screen
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    UnknownComponent Goodbye_screen_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    TextComponent text_goodbye
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Katıldığınız için teşekkür ederiz. :)

        Bitirmek için BOŞLUK tuşuna basınız.
    KeyboardComponent key_respgoodbye
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Studypractice
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    UnknownComponent Studypractice_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    TextComponent text_p
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $target_p
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    KeyboardComponent key_respstudy
      allowedKeys = 'z','m'
      correctAns = $CorrAns_p
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Kelimedir: "m"
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    TextComponent text_4
      color = black
      letterHeight = 0.05
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text = Kelime değildir: "z"
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        nCorr = 0
        rtList = []

        #corr: correct answer
        #rt: reaction time adında iki liste oluşturduk
      Begin Routine:
        corr = -1
      End Routine:
        #verilen cevap için correct answer. Doğru cevap böyle yazılır ama false için belirtmen gerekir yazarsan.
        if key_respstudy.corr:
            nCorr = nCorr +1

        #reaction time list içine cevapları aldık. Cevapların reaction timeı
        rtList.append(key_respstudy.rt)

        #neyin ne olduğunu eşleştirdik
        corr = key_respstudy.corr
        rt = key_respstudy.rt

        #this experimente veri ekledik
        thisExp.addData('rt',rt)
        thisExp.addData('corr',corr)
  Routine Fixation
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    UnknownComponent Fixation_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # event.Mouse(visible=False)

        #deneyden mouse sildik.
    TextComponent textFix
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    TextComponent text
      color = black
      letterHeight = 0.05
      pos = (-0.5, -.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Kelime değildir: "z"
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    TextComponent text_7
      color = black
      letterHeight = 0.05
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Kelimedir: "m"
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  Routine test2part
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    UnknownComponent test2part_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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  Routine test3part
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    UnknownComponent test3part_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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  Routine Pause
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    UnknownComponent Pause_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        if trialCount not in breakTrials:
            continueRoutine = False
    TextComponent text_pause
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Küçük bir mola verebilirsin.


        Teste devam etmek için BOŞLUK tuşuna bas.
    KeyboardComponent key_resp_xx
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Consent
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    CodeComponent code_6
      Code Type = Auto->JS
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      Each Frame:
        if image.contains(mouse):
            image.size = (0.2,0.2)
        else:
            image.size = (0.15,0.15)
    TextComponent text_9
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Bu deneyle ilgili herhangi bir sorunuz, öneriniz, endişeniz veya şikâyetiniz varsa lütfen bizimle iletişime geçiniz: Manuel Perea (Manuel.Perea@uv.es), Zeynep Güneş Özkan (Zeynep.Ozkan@uv.es) veya Berceste Özdemir (BercesteOzdemir@gmail.com) Onayınızı istediğiniz zaman geri çekebilirsiniz. Bu durumda tüm kişisel ve araştırma verileriniz silinecektir.

        Bu araştırmaya katılmayı gönüllü olarak kabul ediyorsanız, yandaki kutucuğa fare ile tıklayınız.
    ImageComponent image
      image = checkbox1.png
      pos = (-0.55, -0.15)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine consent1
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    TextComponent text_10
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Gizlilik Politikası ve Genel Bilgiler Riskler

        Bu deneye katılım tamamen gönüllülük esasına bağlıdır ve herhangi özel bir risk içermez. Çalışmanın Akışı Deney sırasında size Türkçe kelimeler tek tek sunulacak ve sizden kelimeleri anlam kategorilerine göre sınıflandırmanız istenecektir. Deneyin Sonlandırılması Deneyi istediğiniz vakitte sonlandırabilirsiniz. Bu sizin için herhangi bir olumsuz sonuç teşkil etmeyecektir. Veri İşleme Bu deneyden elde edilen tüm veriler gizli tutulacak, isimsiz olarak saklanacak ve yalnızca araştırma amacıyla kullanılacaktır. Deneyin başında girdiğiniz bilgiler (yaş, cinsiyet) verileri etkilemektedir. Sizden daha fazla kişisel veri toplanmayacaktır. Saklanan veriler, erişime açılamaz.

        Devam etmek için BOŞLUK tuşuna basınız.
  Routine start
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    TextComponent text_11
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Çalışmaya başlamadan önce ufak bir pratik yer almaktadır.
        Kelimedir: "m"
        Kelime değildir: "z"

        Pratik teste başlamak için BOŞLUK tuşuna basınız.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine anket
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  PavloviaSurveyRoutine Anket
    surveyType = id
  PavloviaSurveyRoutine survey_2
    surveyId = #3858749f-2e36-4002-97bc-5fa38902ce5d
    surveyType = id
Flow
  Routine anket
  LoopInitiator intro_x loopType="TrialHandler"
    conditionsFile = intro.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Introduction': 'Deneye hoş geldiniz,\n\nDevam etmek için BOŞLUK tuşuna basınız.'},
      {'Introduction': 'Bu çalışma Valencia Üniversitesi kapsamında yürütülmektedir. Deneydeki göreviniz, ekrana çıkacak Türkçe sözcüklerin kelime olup olmadığını belirlemenizdir. Eğer sözcük gerçek bir kelime ise "m" tuşuna, değil ise "z" tuşuna basınız.   \n\nDevam etmek için BOŞLUK tuşuna basınız.'},
      {'Introduction': 'Her sözcük için en fazla iki saniyede cevap vermeniz beklenmektedir. Aksi takdirde deney bir sonraki sözcük ile devam eder. \nBu çalışmada oldukça hızlı ve doğru cevaplama yapmanız beklenmektedir.\n\nDevam etmek için BOŞLUK tuşuna basınız.'},
      {'Introduction': 'Çalışmaya başlamadan önce ufak bir pratik yer almaktadır.\nKelimedir: "m"\nKelime değildir: "z"\n\nPratik teste başlamak için BOŞLUK tuşuna basınız. '}]
    Routine Welcome_screen
  LoopTerminator intro_x
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'item_nr_p': 1, 'target_p': 'hazır', 'isHarmonic_p': 'harmonic', 'target_cond_p': 'word', 'CorrAns_p': 'm'},
      {'item_nr_p': 2, 'target_p': 'veri', 'isHarmonic_p': 'harmonic', 'target_cond_p': 'word', 'CorrAns_p': 'm'},
      {'item_nr_p': 3, 'target_p': 'yardım', 'isHarmonic_p': 'harmonic', 'target_cond_p': 'word', 'CorrAns_p': 'm'},
      {'item_nr_p': 4, 'target_p': 'sevgi', 'isHarmonic_p': 'harmonic', 'target_cond_p': 'word', 'CorrAns_p': 'm'},
      {'item_nr_p': 5, 'target_p': 'soğuk', 'isHarmonic_p': 'harmonic', 'target_cond_p': 'word', 'CorrAns_p': 'm'},
      {'item_nr_p': 6, 'target_p': 'gizli', 'isHarmonic_p': 'harmonic', 'target_cond_p': 'word', 'CorrAns_p': 'm'},
      {'item_nr_p': 7, 'target_p': 'sebep', 'isHarmonic_p': 'harmonic', 'target_cond_p': 'word', 'CorrAns_p': 'm'},
      {'item_nr_p': 8, 'target_p': 'oran', 'isHarmonic_p': 'harmonic', 'target_cond_p': 'word', 'CorrAns_p': 'm'},
      {'item_nr_p': 9, 'target_p': 'bilim', 'isHarmonic_p': 'harmonic', 'target_cond_p': 'word', 'CorrAns_p': 'm'},
      {'item_nr_p': 10, 'target_p': 'zarar', 'isHarmonic_p': 'harmonic', 'target_cond_p': 'word', 'CorrAns_p': 'm'},
      {'item_nr_p': 11, 'target_p': 'nefret', 'isHarmonic_p': 'harmonic', 'target_cond_p': 'word', 'CorrAns_p': 'm'},
      {'item_nr_p': 12, 'target_p': 'teslim', 'isHarmonic_p': 'harmonic', 'target_cond_p': 'word', 'CorrAns_p': 'm'},
      {'item_nr_p': 13, 'target_p': 'tahip', 'isHarmonic_p': 'notharmonic', 'target_cond_p': 'nw', 'CorrAns_p': 'z'}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
    Routine Fixation
    Routine Studypractice
    Routine Feedback
  LoopTerminator practice_loop
  Routine Instraction
  LoopInitiator test_loop loopType="TrialHandler"
    conditionsFile = task.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'item_nr': 1, 'target': 'sanat', 'BlogFreq_A1': 3121, 'BlogFreqpm_A1': 141.8059, 'BlogCD_A1': 2485, 'BlogCDPc_A1': 0.2717, 'WordLength_A1': 5, 'isHarmonic_A1': 'harmonic', 'old20': 1.4, 'target_cond': 'word', 'CorrAns': 'm'},
      {'item_nr': 2, 'target': 'erkek', 'BlogFreq_A1': 6188, 'BlogFreqpm_A1': 281.1582, 'BlogCD_A1': 5195, 'BlogCDPc_A1': 0.5679, 'WordLength_A1': 5, 'isHarmonic_A1': 'harmonic', 'old20': 1.65, 'target_cond': 'word', 'CorrAns': 'm'},
      {'item_nr': 3, 'target': 'radyo', 'BlogFreq_A1': 763, 'BlogFreqpm_A1': 34.6677, 'BlogCD_A1': 636, 'BlogCDPc_A1': 0.0695, 'WordLength_A1': 5, 'isHarmonic_A1': 'harmonic', 'old20': 1.85, 'target_cond': 'word', 'CorrAns': 'm'},
      {'item_nr': 4, 'target': 'minik', 'BlogFreq_A1': 2916, 'BlogFreqpm_A1': 132.4915, 'BlogCD_A1': 2594, 'BlogCDPc_A1': 0.2836, 'WordLength_A1': 5, 'isHarmonic_A1': 'harmonic', 'old20': 1.6, 'target_cond': 'word', 'CorrAns': 'm'},
      {'item_nr': 5, 'target': 'metre', 'BlogFreq_A1': 1156, 'BlogFreqpm_A1': 52.5241, 'BlogCD_A1': 1015, 'BlogCDPc_A1': 0.111, 'WordLength_A1': 5, 'isHarmonic_A1': 'harmonic', 'old20': 1.7, 'target_cond': 'word', 'CorrAns': 'm'},
      {'item_nr': 6, 'target': 'bebek', 'BlogFreq_A1': 3301, 'BlogFreqpm_A1': 149.9843, 'BlogCD_A1': 2794, 'BlogCDPc_A1': 0.3054, 'WordLength_A1': 5, 'isHarmonic_A1': 'harmonic', 'old20': 1.6, 'target_cond': 'word', 'CorrAns': 'm'}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
    Routine Fixation
    Routine TestTrial
    Routine Pause
  LoopTerminator test_loop
  Routine Goodbye_screen
